PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = default
  Screen = 2
  Show mouse = True
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = Minimal Final
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine text
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    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimuli
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Define the possible options
        shapes = ["square", "triangle", "circle"]
        colors = ["green", "red", "blue"]
        quantities = [1, 2, 3]

        # Declare global variables
        chosen_shape = None
        chosen_color = None
        chosen_quantity = None

        # List to collect data
        data_collection = []

        # Define a function to create a shape
        def create_shape(shape, color, position):
            if shape == "square":
                return visual.Rect(win, width=0.6, height=0.6, fillColor=color, pos=position)
            elif shape == "triangle":
                return visual.ShapeStim(win, vertices=[(-0.3, -0.3), (0.3, -0.3), (0, 0.3)], fillColor=color, pos=position)
            elif shape == "circle":
                return visual.Circle(win, radius=0.3, fillColor=color, pos=position)

        # Generate positions for the stimuli
        positions = [(0, 0), (-3, 0), (3, 0)]
      Begin Routine:
        import random

        # Randomly select shape, color, and quantity for each trial
        chosen_shape = random.choice(shapes)
        chosen_color = random.choice(colors)
        chosen_quantity = random.choice(quantities)

        # Generate fixed x positions based on the quantity
        stimuli = []
        positions = []  # List to store fixed positions
        fixed_y = 0  # Fixed y-coordinate for all shapes

        # Define positions based on the quantity
        if chosen_quantity == 1:
            positions = [(0, fixed_y)]
        elif chosen_quantity == 2:
            spacing = 0.3  # Adjust spacing as needed
            positions = [(-spacing, fixed_y), (spacing, fixed_y)]
        elif chosen_quantity == 3:
            spacing = 0.9  # Adjust spacing as needed
            positions = [(-spacing, fixed_y), (0, fixed_y), (spacing, fixed_y)]

        # Create and store the shapes at these fixed positions
        for i in range(chosen_quantity):
            shape = create_shape(chosen_shape, chosen_color, positions[i])
            stimuli.append(shape)

        # Draw all shapes
        for stimulus in stimuli:
            stimulus.draw()

        win.flip()  # Update the display
        core.wait(0.5)  # Wait for 500ms
      End Routine:
        # Record the variables in the Psychopy data file

        thisExp.saveAsWideText('data/output_data.csv')
        thisExp.addData('shape', chosen_shape)
        thisExp.addData('color', chosen_color)
        thisExp.addData('quantity', chosen_quantity)
  Routine Color
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    PolygonComponent outer_circle
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.6)
      startVal [time (s)] = 0.0
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    PolygonComponent middle_circle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      shape = circle
      size = (0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent inner_circle
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent v_line
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = line
      size = (0.01, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent h_line
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = triangle
      size = (2, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine tab
        continueRoutine = True
        response_counter = 0  # Ensure response counter resets each time
      Each Frame:
        import math

        # Begin Routine tab
        response_counter = 0  # Ensure response counter resets each time
        max_responses = 1     # Set to 1 if you want to end after one click


        # Check the mouse button state each frame
        mouse_buttons = mouse.getPressed()

        # Only proceed if left mouse button is pressed and we haven't reached max responses
        if mouse_buttons[0] and response_counter < max_responses:  # Checks if the left button is pressed
            # Check if the mouse clicked on any of the circles and set the region and color
            if mouse.isPressedIn(inner_circle):
                region = "inner region"
                color = "Red"
            elif mouse.isPressedIn(middle_circle):
                region = "middle region"
                color = "Blue"
            elif mouse.isPressedIn(outer_circle):
                region = "outer region"
                color = "Green"
            else:
                region = "outside the circles"
                color = "None"

            # Add region and color to data
            thisExp.addData("region", region)
            thisExp.addData("color", color)

            # Get the mouse position
            mouse_pos = mouse.getPos()
            radius = (mouse_pos[0]**2 + mouse_pos[1]**2)**0.5

            # Add radius to data
            thisExp.addData("radius", radius)

            # Calculate the angle of the click
            angle = math.degrees(math.atan2(mouse_pos[1], mouse_pos[0]))
            if angle < 0:
                angle += 360  # Normalize angle to be between 0 and 360 degrees

            # Add angle to data
            thisExp.addData("angle", angle)

            # Assign quadrant numbers based on 90-degree angle ranges
            if 0 <= angle < 90:
                quadrant = 1
            elif 90 <= angle < 180:
                quadrant = 2
            elif 180 <= angle < 270:
                quadrant = 3
            elif 270 <= angle < 360:
                quadrant = 4
            else:
                quadrant = "Unknown Quadrant"

            # Add quadrant to data
            thisExp.addData("quadrant", quadrant)

            # Increment the response counter
            response_counter += 1

            # End routine if max responses reached
            if response_counter >= max_responses:
                continueRoutine = False  # Only set this here
                print("Routine ending: Max responses reached")  # Debugging line
    MouseComponent mouse
      clickable = outer_circle , middle_circle, inner_circle
      correctAns = outer_circle , middle_circle, inner_circle
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      saveParamsClickable = outer_circle , middle_circle, inner_circle
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      syncScreenRefresh = True
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  Routine ShapeChoice
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    PolygonComponent Triangle
      fillColor = white
      pos = (0.5, 0)
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent Circle
      fillColor = white
      pos = (-0.5, 0)
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent Square
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp
      clickable = Triangle , Circle, Square
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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  Routine mask
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    ImageComponent image
      image = C:/Users/hourm/Dropbox/Projects/PhD/T Lab/Stimulu.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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Flow
  Routine text
  Routine Stimuli
  Routine mask
  Routine Color
  Routine ShapeChoice
